PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = degFlatPos
  Window size (pixels) = [1920, 1080]
  color = black
  expName = task-switching-replication
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Routines
  Routine practiceTimedTrial
    ImageComponent practiceTimedTaskCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent practiceTimedTaskTargetImage
      image [set every repeat] = $targetFileName
      size = (5.0, 5.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent practiceTimedTaskResponse
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine practiceTimedInstructions
    TextComponent practiceTimedInstructionText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Respond to the cue.

        Practice Trials.  For these practice trials
        you will have a time limit to respond.
        You must respond within 1.5 seconds
        to the stimulus.

         We will  now practice the task
        so you can learn how to respond
        within the time limit correctly.
        For this task you will first
        see a cue, a dashed box or a solid box.
        You must respond to the shape or
        color within 1.5 seconds.

        For a dashed box, respond to the color.
        left for yellow, right for blue

        For a solid box, respond to the shape.
        left for triangle, right for square.

        Remember:
        dashed: left yellow right blue
        solid: left triangle, right square

        Press any key to begin practicing experiment.
    KeyboardComponent practiceTimedKeyResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions
    TextComponent practiceUntimedInstructionText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      wrapWidth = 25.0
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      text:
        Respond to the cue.

        Practice Trials. Take as much
        time as you need to learn and
        respond to the task.

         We will first  practice the task untimed
        so you can learn how to respond correctly.

        For this task you will first
        see a cue, a dashed box or a solid box.
        You must respond to the shape or
        color depending on the box.

        For a dashed box, respond to the color.
        left for yellow, right for blue

        For a solid box, respond to the shape.
        left for triangle, right for square.

        Remember:
        dashed: left yellow right blue
        solid: left triangle, right square

        Press any key to begin practicing experiment.
    KeyboardComponent practiceUntimedKeyResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedTrial
    ImageComponent practiceUntimedTaskCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
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    ImageComponent practiceUntimedTaskTargetImage
      image [set every repeat] = $targetFileName
      size = (5.0, 5.0)
      startVal [time (s)] = 1.0
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    KeyboardComponent practiceUntimedTaskResponse
      allowedKeys = '1', '2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine practiceUntimedFeedbackSelect
    CodeComponent practiceUntimedFeedbackCode
      Code Type = Py
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrect = 0
      Begin Routine:
        if taskResponse.corr == 1:
            selectCorrect = 1
            selectIncorrect = 0
        else:
            selectCorrect = 0
            selectIncorrect = 1
  Routine practiceUntimedCorrectFeedback
  Routine practiceFeedbackSelect
    CodeComponent practiceTimedFeedbackCustomCode
      Code Type = Py
      Begin Experiment:
        selectCorrect = 0
        selectIncorrect = 0
      Begin Routine:
        if practiceUntimedTaskResponse.corr == 1:
            selectCorrect = 1
            selectIncorrect = 0
        else:
            selectCorrect = 0
            selectIncorrect = 1
  Routine practiceCorrectFeedback
    TextComponent practiceTimedFeedbackMessageCorrect
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      wrapWidth = 25
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      text:
        Correct Response

        Remember respond to the square
        cue as quickly as you can.

        Dashed box, respond to color.
        left for yellow, right for blue

        Solid box, respond to shape.
        left for triangle, right for square.
  Routine practiceIncorrectFeedback
    TextComponent feedbackTextIncorrect
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      wrapWidth = 20
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      text:
        Incorrect Response


        Remember respond to the square
        cue as quickly as you can.

        Dashed box, respond to color.
        left for yellow, right for blue

        Solid box, respond to shape.
        left for triangle, right for square.
    SoundComponent feedbackSound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practiceDelay
    TextComponent delayText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine practiceUntimedInstructions
  LoopInitiator practiceUntimedTrials loopType="TrialHandler"
    conditionsFile = task-switching-replication-trialtypes.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 2},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 1},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 1},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 2},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2}]
    Routine practiceUntimedTrial
    Routine practiceFeedbackSelect
    LoopInitiator practiceCorrectConditionSelect loopType="TrialHandler"
      loopType = random
      nReps = selectCorrect
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      Routine practiceCorrectFeedback
    LoopTerminator practiceCorrectConditionSelect
    LoopInitiator practiceIncorrectConditionSelect loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrect
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      Routine practiceIncorrectFeedback
    LoopTerminator practiceIncorrectConditionSelect
    Routine practiceDelay
  LoopTerminator practiceUntimedTrials
  Routine practiceTimedInstructions
  LoopInitiator practiceTimedTrials loopType="TrialHandler"
    conditionsFile = task-switching-replication-trialtypes.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png'}]
    Routine practiceTimedTrial
    Routine practiceFeedbackSelect
    LoopInitiator practiceCorrectConditionSelection loopType="TrialHandler"
      loopType = random
      nReps = selectCorrect
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      Routine practiceCorrectFeedback
    LoopTerminator practiceCorrectConditionSelection
    LoopInitiator practiceIncorrectConditionSelection loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrect
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      Routine practiceIncorrectFeedback
    LoopTerminator practiceIncorrectConditionSelection
    Routine practiceDelay
  LoopTerminator practiceTimedTrials
